<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:xlink="http://www.w3.org/1999/xlink" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:semsim="http://www.bhi.washington.edu/SemSim#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="weinstein_1995" cmeta:id="weinstein_1995">
  <documentation xmlns="http://cellml.org/tmp-documentation">
    <article>
      <articleinfo>
        <title>A kinetically defined Na+/H+ antiporter within a mathematical model of the rat proximal tubule</title>
        <author>
          <firstname>Jonna</firstname>
          <surname>Terkildsen</surname>
          <affiliation>
            <shortaffil>Auckland Bioengineering Institute, University of Auckland</shortaffil>
          </affiliation>
        </author>
      </articleinfo>
      <sect1 id="sec_status">
        <title>Model Status</title>
        <para>This CellML model..........................................</para>
      </sect1>
      <sect1 id="sec_structure">
        <title>Model Structure</title>
        <para>ABSTRACT: The luminal membrane antiporter of the proximal tubule has been represented using the kinetic formulation of E. Heinz (1978. Mechanics and Engergetics of Biological Transport. Springer-Verlag, Berlin) with the assumption of equilibrium binding and 1:1 stoichiometry. Competitive binding and transport of NH+4 is included within this model. Ion affinities and permeation velocities were selected in a least-squares fit to the kinetic parameters determined experimentally in renal membrane vesicles (Aronson, P.S., M.A. Suhm, and J. Nee. 1983. Journal of Biological Chemistry. 258:6767-6771). The modifier role of internal H+ to enhance transport beyond the expected kinetics (Aronson, P.S., J. Nee, and M. A. Suhm. 1982. Nature. 299:161-163) is represented as a velocity effect of H+ binding to a single site. This kinetic formulation of the Na+/H+ antiporter was incorporated within a model of the rat proximal tubule (Weinstein, A. M. 1994. American Journal of Physiology. 267:F237-F248) as a replacement for the representation by linear nonequilibrium thermodynamics (NET). The membrane density of the antiporter was selected to yield agreement with the rate of tubular Na+ reabsorption. Simulation of 0.5 cm of tubule predicts that the activity of the Na+/H+ antiporter is the most important force for active secretion of ammonia. Model calculations of metabolic acid-base disturbances are performed and comparison is made among antiporter representations (kinetic model, kinetic model without internal modifier, and NET formulation). It is found that the ability to sharply turn off Na+/H+ exchange in cellular alkalosis substantially eliminates the cell volume increase associated with high HCO3- conditions. In the tubule model, diminished Na+/H+ exchange in alkalosis blunts the axial decrease in luminal HCO3- and thus diminishes paracellular reabsorption of Cl-. In this way, the kinetics of the Na+/H+ antiporter could act to enhance distal delivery of Na+, Cl-, and HCO3- in acute metabolic alkalosis.</para>
        <para>The original paper reference is cited below:</para>
        <para>
          A kinetically defined Na+/H+ antiporter within a mathematical model of the rat proximal tubule, A.M. Weinstein, 1995,
          <emphasis>The Journal of General Physiology</emphasis>
          , 105, 617-641.
          <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/7658195">PubMed ID: 7658195</ulink>
        </para>
        <informalfigure float="0" id="fig_reaction_diagram">
          <mediaobject>
            <imageobject>
              <objectinfo>
                <title>model diagram</title>
              </objectinfo>
              <imagedata fileref="weinstein_1995.png" />
            </imageobject>
          </mediaobject>
          <caption>Schematic representation of the Na+/H+ antiporter. The carrier may either be empty, X, or bound to one of three ions, Na+, H+, or NH+4, designated XA, XB, or XC. Binding is rapid, and defined by equilibrium constants Ka, Kb, and K~. The carrier or carrier-ion complex may face either the external (') or internal (") membrane surface. Tramlocation of the loaded carrier occurs according to rate coefficients Pa, Pb, and Pc. There is no translocation of empty carrier.</caption>
        </informalfigure>
      </sect1>
    </article>
  </documentation>
  <units name="nmol_per_s_per_cm2">
    <unit exponent="-1.0" units="cm2" />
    <unit exponent="-1.0" units="second" />
    <unit units="nmol" />
  </units>
  <units name="umol">
    <unit prefix="micro" units="mole" />
  </units>
  <units name="mmol">
    <unit prefix="milli" units="mole" />
  </units>
  <units name="per_s">
    <unit exponent="-1.0" units="second" />
  </units>
  <units name="M">
    <unit exponent="-1.0" units="litre" />
    <unit units="mole" />
  </units>
  <units name="mM">
    <unit prefix="milli" units="mole" />
    <unit exponent="-1.0" units="litre" />
  </units>
  <units name="cm2">
    <unit exponent="2.0" prefix="centi" units="metre" />
  </units>
  <units name="nmol">
    <unit prefix="nano" units="mole" />
  </units>
  <units name="mM_per_s">
    <unit exponent="-1.0" units="second" />
    <unit units="mM" />
  </units>
  <units name="mmol_per_s_per_cm2">
    <unit units="mmol" />
    <unit exponent="-1.0" units="cm2" />
    <unit exponent="-1.0" units="second" />
  </units>
  <units name="cm">
    <unit prefix="centi" units="metre" />
  </units>
  <component name="environment">
    <variable cmeta:id="environment.time" name="time" public_interface="out" units="second" />
  </component>
  <component name="Concentrations">
    <variable cmeta:id="Concentrations.C_ext_Na" initial_value="140" name="C_ext_Na" public_interface="out" units="mM" />
    <variable cmeta:id="Concentrations.C_ext_H" initial_value="4.95e-2" name="C_ext_H" public_interface="out" units="mM" />
    <variable cmeta:id="Concentrations.C_ext_NH4" initial_value="0.2" name="C_ext_NH4" public_interface="out" units="mM" />
    <variable cmeta:id="Concentrations.C_int_Na" initial_value="19.6" name="C_int_Na" public_interface="out" units="mM" />
    <variable cmeta:id="Concentrations.C_int_H" initial_value="1e-3" name="C_int_H" public_interface="out" units="mM" />
    <variable cmeta:id="Concentrations.C_int_NH4" initial_value="0.23" name="C_int_NH4" public_interface="out" units="mM" />
    <variable cmeta:id="Concentrations.time" name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>C_ext_Na</ci>
        </apply>
        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM_per_s">10</cn>
      </apply>
    </math>
  </component>
  <component name="NHE3_Parameters">
    <variable cmeta:id="NHE3_Parameters.XTxP0_NHE3_Na" initial_value="1.6e-3" name="XTxP0_NHE3_Na" public_interface="out" units="nmol_per_s_per_cm2" />
    <variable cmeta:id="NHE3_Parameters.XTxP0_NHE3_H" initial_value="0.48e-3" name="XTxP0_NHE3_H" public_interface="out" units="nmol_per_s_per_cm2" />
    <variable cmeta:id="NHE3_Parameters.XTxP0_NHE3_NH4" initial_value="1.6e-3" name="XTxP0_NHE3_NH4" public_interface="out" units="nmol_per_s_per_cm2" />
    <variable cmeta:id="NHE3_Parameters.K_NHE3_Na" initial_value="0.03e3" name="K_NHE3_Na" public_interface="out" units="mM" />
    <variable cmeta:id="NHE3_Parameters.K_NHE3_H" initial_value="72e-6" name="K_NHE3_H" public_interface="out" units="mM" />
    <variable cmeta:id="NHE3_Parameters.K_NHE3_NH4" initial_value="0.027e3" name="K_NHE3_NH4" public_interface="out" units="mM" />
  </component>
  <component name="NHE3">
    <variable cmeta:id="NHE3.C_ext_Na" name="C_ext_Na" public_interface="in" units="mM" />
    <variable cmeta:id="NHE3.C_ext_H" name="C_ext_H" public_interface="in" units="mM" />
    <variable cmeta:id="NHE3.C_ext_NH4" name="C_ext_NH4" public_interface="in" units="mM" />
    <variable cmeta:id="NHE3.C_int_Na" name="C_int_Na" public_interface="in" units="mM" />
    <variable cmeta:id="NHE3.C_int_H" name="C_int_H" public_interface="in" units="mM" />
    <variable cmeta:id="NHE3.C_int_NH4" name="C_int_NH4" public_interface="in" units="mM" />
    <variable cmeta:id="NHE3.XTxP0_NHE3_Na" name="XTxP0_NHE3_Na" public_interface="in" units="nmol_per_s_per_cm2" />
    <variable cmeta:id="NHE3.XTxP0_NHE3_H" name="XTxP0_NHE3_H" public_interface="in" units="nmol_per_s_per_cm2" />
    <variable cmeta:id="NHE3.XTxP0_NHE3_NH4" name="XTxP0_NHE3_NH4" public_interface="in" units="nmol_per_s_per_cm2" />
    <variable cmeta:id="NHE3.XTxP_NHE3_Na" name="XTxP_NHE3_Na" units="nmol_per_s_per_cm2" />
    <variable cmeta:id="NHE3.XTxP_NHE3_H" name="XTxP_NHE3_H" units="nmol_per_s_per_cm2" />
    <variable cmeta:id="NHE3.XTxP_NHE3_NH4" name="XTxP_NHE3_NH4" units="nmol_per_s_per_cm2" />
    <variable cmeta:id="NHE3.K_NHE3_Na" name="K_NHE3_Na" public_interface="in" units="mM" />
    <variable cmeta:id="NHE3.K_NHE3_H" name="K_NHE3_H" public_interface="in" units="mM" />
    <variable cmeta:id="NHE3.K_NHE3_NH4" name="K_NHE3_NH4" public_interface="in" units="mM" />
    <variable cmeta:id="NHE3.alpha_ext_Na" name="alpha_ext_Na" units="dimensionless" />
    <variable cmeta:id="NHE3.beta_ext_H" name="beta_ext_H" units="dimensionless" />
    <variable cmeta:id="NHE3.gamma_ext_NH4" name="gamma_ext_NH4" units="dimensionless" />
    <variable cmeta:id="NHE3.alpha_int_Na" name="alpha_int_Na" units="dimensionless" />
    <variable cmeta:id="NHE3.beta_int_H" name="beta_int_H" units="dimensionless" />
    <variable cmeta:id="NHE3.gamma_int_NH4" name="gamma_int_NH4" units="dimensionless" />
    <variable cmeta:id="NHE3.sum_NHE3" name="sum_NHE3" units="nmol_per_s_per_cm2" />
    <variable cmeta:id="NHE3.J_NHE3_Na" name="J_NHE3_Na" public_interface="out" units="nmol_per_s_per_cm2" />
    <variable cmeta:id="NHE3.J_NHE3_H" name="J_NHE3_H" public_interface="out" units="nmol_per_s_per_cm2" />
    <variable cmeta:id="NHE3.J_NHE3_NH4" name="J_NHE3_NH4" public_interface="out" units="nmol_per_s_per_cm2" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>alpha_ext_Na</ci>
        <apply>
          <divide />
          <ci>C_ext_Na</ci>
          <ci>K_NHE3_Na</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>beta_ext_H</ci>
        <apply>
          <divide />
          <ci>C_ext_H</ci>
          <ci>K_NHE3_H</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>gamma_ext_NH4</ci>
        <apply>
          <divide />
          <ci>C_ext_NH4</ci>
          <ci>K_NHE3_NH4</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>alpha_int_Na</ci>
        <apply>
          <divide />
          <ci>C_int_Na</ci>
          <ci>K_NHE3_Na</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>beta_int_H</ci>
        <apply>
          <divide />
          <ci>C_int_H</ci>
          <ci>K_NHE3_H</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>gamma_int_NH4</ci>
        <apply>
          <divide />
          <ci>C_int_NH4</ci>
          <ci>K_NHE3_NH4</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>XTxP_NHE3_Na</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <ci>XTxP0_NHE3_Na</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
            <ci>C_int_H</ci>
          </apply>
          <apply>
            <plus />
            <ci>C_int_H</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM" type="e-notation">
              1
              <sep />
              -6
            </cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>XTxP_NHE3_H</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <ci>XTxP0_NHE3_H</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
            <ci>C_int_H</ci>
          </apply>
          <apply>
            <plus />
            <ci>C_int_H</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM" type="e-notation">
              1
              <sep />
              -6
            </cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>XTxP_NHE3_NH4</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <ci>XTxP0_NHE3_NH4</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
            <ci>C_int_H</ci>
          </apply>
          <apply>
            <plus />
            <ci>C_int_H</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM" type="e-notation">
              1
              <sep />
              -6
            </cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>sum_NHE3</ci>
        <apply>
          <plus />
          <apply>
            <times />
            <apply>
              <plus />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
              <ci>alpha_ext_Na</ci>
              <ci>beta_ext_H</ci>
              <ci>gamma_ext_NH4</ci>
            </apply>
            <apply>
              <plus />
              <apply>
                <times />
                <ci>XTxP_NHE3_Na</ci>
                <ci>alpha_int_Na</ci>
              </apply>
              <apply>
                <times />
                <ci>XTxP_NHE3_H</ci>
                <ci>beta_int_H</ci>
              </apply>
              <apply>
                <times />
                <ci>XTxP_NHE3_NH4</ci>
                <ci>gamma_int_NH4</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <times />
            <apply>
              <plus />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
              <ci>alpha_int_Na</ci>
              <ci>beta_int_H</ci>
              <ci>gamma_int_NH4</ci>
            </apply>
            <apply>
              <plus />
              <apply>
                <times />
                <ci>XTxP_NHE3_Na</ci>
                <ci>alpha_ext_Na</ci>
              </apply>
              <apply>
                <times />
                <ci>XTxP_NHE3_H</ci>
                <ci>beta_ext_H</ci>
              </apply>
              <apply>
                <times />
                <ci>XTxP_NHE3_NH4</ci>
                <ci>gamma_ext_NH4</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>J_NHE3_Na</ci>
        <apply>
          <plus />
          <apply>
            <times />
            <apply>
              <divide />
              <apply>
                <times />
                <ci>XTxP_NHE3_Na</ci>
                <ci>XTxP_NHE3_H</ci>
              </apply>
              <ci>sum_NHE3</ci>
            </apply>
            <apply>
              <minus />
              <apply>
                <times />
                <ci>alpha_ext_Na</ci>
                <ci>beta_int_H</ci>
              </apply>
              <apply>
                <times />
                <ci>alpha_int_Na</ci>
                <ci>beta_ext_H</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <times />
            <apply>
              <divide />
              <apply>
                <times />
                <ci>XTxP_NHE3_Na</ci>
                <ci>XTxP_NHE3_NH4</ci>
              </apply>
              <ci>sum_NHE3</ci>
            </apply>
            <apply>
              <minus />
              <apply>
                <times />
                <ci>alpha_ext_Na</ci>
                <ci>gamma_int_NH4</ci>
              </apply>
              <apply>
                <times />
                <ci>alpha_int_Na</ci>
                <ci>gamma_ext_NH4</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>J_NHE3_H</ci>
        <apply>
          <plus />
          <apply>
            <times />
            <apply>
              <divide />
              <apply>
                <times />
                <ci>XTxP_NHE3_Na</ci>
                <ci>XTxP_NHE3_H</ci>
              </apply>
              <ci>sum_NHE3</ci>
            </apply>
            <apply>
              <minus />
              <apply>
                <times />
                <ci>alpha_int_Na</ci>
                <ci>beta_ext_H</ci>
              </apply>
              <apply>
                <times />
                <ci>alpha_ext_Na</ci>
                <ci>beta_int_H</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <times />
            <apply>
              <divide />
              <apply>
                <times />
                <ci>XTxP_NHE3_H</ci>
                <ci>XTxP_NHE3_NH4</ci>
              </apply>
              <ci>sum_NHE3</ci>
            </apply>
            <apply>
              <minus />
              <apply>
                <times />
                <ci>beta_ext_H</ci>
                <ci>gamma_int_NH4</ci>
              </apply>
              <apply>
                <times />
                <ci>beta_int_H</ci>
                <ci>gamma_ext_NH4</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>J_NHE3_NH4</ci>
        <apply>
          <plus />
          <apply>
            <times />
            <apply>
              <divide />
              <apply>
                <times />
                <ci>XTxP_NHE3_Na</ci>
                <ci>XTxP_NHE3_NH4</ci>
              </apply>
              <ci>sum_NHE3</ci>
            </apply>
            <apply>
              <minus />
              <apply>
                <times />
                <ci>alpha_int_Na</ci>
                <ci>gamma_ext_NH4</ci>
              </apply>
              <apply>
                <times />
                <ci>alpha_ext_Na</ci>
                <ci>gamma_int_NH4</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <times />
            <apply>
              <divide />
              <apply>
                <times />
                <ci>XTxP_NHE3_H</ci>
                <ci>XTxP_NHE3_NH4</ci>
              </apply>
              <ci>sum_NHE3</ci>
            </apply>
            <apply>
              <minus />
              <apply>
                <times />
                <ci>gamma_ext_NH4</ci>
                <ci>beta_int_H</ci>
              </apply>
              <apply>
                <times />
                <ci>beta_ext_H</ci>
                <ci>gamma_int_NH4</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <connection>
    <map_components component_1="NHE3_Parameters" component_2="NHE3" />
    <map_variables variable_1="XTxP0_NHE3_NH4" variable_2="XTxP0_NHE3_NH4" />
    <map_variables variable_1="K_NHE3_Na" variable_2="K_NHE3_Na" />
    <map_variables variable_1="K_NHE3_H" variable_2="K_NHE3_H" />
    <map_variables variable_1="K_NHE3_NH4" variable_2="K_NHE3_NH4" />
    <map_variables variable_1="XTxP0_NHE3_Na" variable_2="XTxP0_NHE3_Na" />
    <map_variables variable_1="XTxP0_NHE3_H" variable_2="XTxP0_NHE3_H" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="Concentrations" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="Concentrations" component_2="NHE3" />
    <map_variables variable_1="C_int_NH4" variable_2="C_int_NH4" />
    <map_variables variable_1="C_int_H" variable_2="C_int_H" />
    <map_variables variable_1="C_ext_H" variable_2="C_ext_H" />
    <map_variables variable_1="C_ext_NH4" variable_2="C_ext_NH4" />
    <map_variables variable_1="C_ext_Na" variable_2="C_ext_Na" />
    <map_variables variable_1="C_int_Na" variable_2="C_int_Na" />
  </connection>
  <rdf:RDF xmlns:bqmodel="http://biomodels.net/model-qualifiers/" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" xmlns:ro="http://www.obofoundry.org/ro/ro.owl#" xmlns:opb="http://bhi.washington.edu/OPB#">
    <rdf:Description rdf:about="#NHE3.C_ext_Na">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_9">
          <semsim:physicalPropertyOf>
            <rdf:Description rdf:about="#entity_0">
              <ro:part_of>
                <rdf:Description rdf:about="#entity_1">
                  <semsim:hasPhysicalDefinition rdf:resource="http://purl.obolibrary.org/obo/FMA_74550" />
                </rdf:Description>
              </ro:part_of>
              <semsim:hasPhysicalDefinition rdf:resource="http://purl.obolibrary.org/obo/CHEBI_29101" />
            </rdf:Description>
          </semsim:physicalPropertyOf>
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
      <dcterms:description>Concentration of Na+ in the luminal compartment</dcterms:description>
    </rdf:Description>
    <rdf:Description rdf:about="#NHE3_Parameters.K_NHE3_Na">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_6">
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#NHE3.C_int_NH4">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_14">
          <semsim:physicalPropertyOf>
            <rdf:Description rdf:about="#entity_7">
              <ro:part_of>
                <rdf:Description rdf:about="#entity_5">
                  <semsim:hasPhysicalDefinition rdf:resource="http://purl.obolibrary.org/obo/FMA_66836" />
                </rdf:Description>
              </ro:part_of>
              <semsim:hasPhysicalDefinition rdf:resource="http://purl.obolibrary.org/obo/CHEBI_28938" />
            </rdf:Description>
          </semsim:physicalPropertyOf>
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
      <dcterms:description>Concentration of NH4+ in the cytosol compartment</dcterms:description>
    </rdf:Description>
    <rdf:Description rdf:about="#NHE3_Parameters.K_NHE3_H">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_7">
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#process_0" dcterms:description="" />
    <rdf:Description rdf:about="#Concentrations.C_int_NH4">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_5">
          <semsim:physicalPropertyOf rdf:resource="#entity_7" />
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
      <dcterms:description>Concentration of NH4+ in the cytosol compartment</dcterms:description>
    </rdf:Description>
    <rdf:Description rdf:about="#NHE3.K_NHE3_Na">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_15">
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#NHE3.J_NHE3_H">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_19">
          <semsim:physicalPropertyOf>
            <rdf:Description rdf:about="#process_1" dcterms:description="">
              <semsim:hasMediatorParticipant>
                <rdf:Description rdf:about="#mediator_3">
                  <semsim:hasPhysicalEntityReference>
                    <rdf:Description rdf:about="#entity_9">
                      <semsim:hasPhysicalDefinition rdf:resource="http://purl.obolibrary.org/obo/FMA_84666" />
                    </rdf:Description>
                  </semsim:hasPhysicalEntityReference>
                </rdf:Description>
              </semsim:hasMediatorParticipant>
              <semsim:hasMediatorParticipant>
                <rdf:Description rdf:about="#mediator_2">
                  <semsim:hasPhysicalEntityReference>
                    <rdf:Description rdf:about="#entity_8">
                      <semsim:hasPhysicalDefinition rdf:resource="http://purl.obolibrary.org/obo/PR_P26433" />
                    </rdf:Description>
                  </semsim:hasPhysicalEntityReference>
                </rdf:Description>
              </semsim:hasMediatorParticipant>
              <semsim:hasSinkParticipant>
                <rdf:Description rdf:about="#sink_1" semsim:hasMultiplier="1.0">
                  <semsim:hasPhysicalEntityReference>
                    <rdf:Description rdf:about="#entity_6">
                      <ro:part_of rdf:resource="#entity_5" />
                      <semsim:hasPhysicalDefinition rdf:resource="http://purl.obolibrary.org/obo/CHEBI_15378" />
                    </rdf:Description>
                  </semsim:hasPhysicalEntityReference>
                </rdf:Description>
              </semsim:hasSinkParticipant>
              <semsim:hasSourceParticipant>
                <rdf:Description rdf:about="#source_1" semsim:hasMultiplier="1.0">
                  <semsim:hasPhysicalEntityReference>
                    <rdf:Description rdf:about="#entity_2">
                      <ro:part_of rdf:resource="#entity_1" />
                      <semsim:hasPhysicalDefinition rdf:resource="http://purl.obolibrary.org/obo/CHEBI_15378" />
                    </rdf:Description>
                  </semsim:hasPhysicalEntityReference>
                </rdf:Description>
              </semsim:hasSourceParticipant>
              <semsim:name>H+ flow through apical plasma membrane</semsim:name>
            </rdf:Description>
          </semsim:physicalPropertyOf>
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00593" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
      <dcterms:description>Flux of H+ from luminal to cytosol through apical plasma membrane</dcterms:description>
    </rdf:Description>
    <rdf:Description rdf:about="#Concentrations.C_ext_Na">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_0">
          <semsim:physicalPropertyOf rdf:resource="#entity_0" />
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
      <dcterms:description>Concentration of Na+ in the luminal compartment</dcterms:description>
    </rdf:Description>
    <rdf:Description rdf:about="#NHE3_Parameters.K_NHE3_NH4">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_8">
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#NHE3.C_int_H">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_13">
          <semsim:physicalPropertyOf rdf:resource="#entity_6" />
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
      <dcterms:description>Concentration of H+ in the cytosol compartment</dcterms:description>
    </rdf:Description>
    <rdf:Description rdf:about="#NHE3.K_NHE3_NH4">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_17">
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#environment.time" dcterms:description="Time">
      <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_01023" />
    </rdf:Description>
    <rdf:Description rdf:about="#Concentrations.C_int_H">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_4">
          <semsim:physicalPropertyOf rdf:resource="#entity_6" />
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
      <dcterms:description>Concentration of H+ in the cytosol compartment</dcterms:description>
    </rdf:Description>
    <rdf:Description rdf:about="#NHE3.C_int_Na">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_12">
          <semsim:physicalPropertyOf>
            <rdf:Description rdf:about="#entity_4">
              <ro:part_of rdf:resource="#entity_5" />
              <semsim:hasPhysicalDefinition rdf:resource="http://purl.obolibrary.org/obo/CHEBI_29101" />
            </rdf:Description>
          </semsim:physicalPropertyOf>
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
      <dcterms:description>Concentration of Na+ in the cytosol compartment</dcterms:description>
    </rdf:Description>
    <rdf:Description rdf:about="#weinstein_1995" semsim:PubMedIDofReferencePublication="7658195" semsim:modelId="weinstein_1995" semsim:modelName="weinstein_1995" />
    <rdf:Description rdf:about="#NHE3.J_NHE3_NH4">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_20">
          <semsim:physicalPropertyOf>
            <rdf:Description rdf:about="#process_2" dcterms:description="">
              <semsim:hasMediatorParticipant>
                <rdf:Description rdf:about="#mediator_4">
                  <semsim:hasPhysicalEntityReference rdf:resource="#entity_9" />
                </rdf:Description>
              </semsim:hasMediatorParticipant>
              <semsim:hasSinkParticipant>
                <rdf:Description rdf:about="#sink_2" semsim:hasMultiplier="1.0">
                  <semsim:hasPhysicalEntityReference rdf:resource="#entity_7" />
                </rdf:Description>
              </semsim:hasSinkParticipant>
              <semsim:hasSourceParticipant>
                <rdf:Description rdf:about="#source_2" semsim:hasMultiplier="1.0">
                  <semsim:hasPhysicalEntityReference>
                    <rdf:Description rdf:about="#entity_3">
                      <ro:part_of rdf:resource="#entity_1" />
                      <semsim:hasPhysicalDefinition rdf:resource="http://purl.obolibrary.org/obo/CHEBI_28938" />
                    </rdf:Description>
                  </semsim:hasPhysicalEntityReference>
                </rdf:Description>
              </semsim:hasSourceParticipant>
              <semsim:name>NH4+ flow through apical plasma membrane</semsim:name>
            </rdf:Description>
          </semsim:physicalPropertyOf>
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00593" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
      <dcterms:description>Flux of NH4+ from luminal to cytosol through apical plasma membrane</dcterms:description>
    </rdf:Description>
    <rdf:Description rdf:about="#weinstein_1995">
      <ro:compartmentOf rdf:resource="http://purl.obolibrary.org/obo/FMA_66836" />
      <ro:located_in rdf:resource="http://purl.obolibrary.org/obo/FMA_84666" />
      <vCard:FN>Alan M. Weinstein</vCard:FN>
      <dcterms:title>A Kinetically Defined Na +/H + Antiporter within a Mathematical Model of the Rat Proximal Tubule</dcterms:title>
      <ro:modelOf rdf:resource="http://purl.obolibrary.org/obo/PR_P26433" />
      <dcterms:abstract>The luminal membrane antiporter of the proximal tubule has been represented using the kinetic formulation of E. Heinz (1978. Mechanics and Engergetics of Biological Transport. Springer-Verlag, Berlin) with the assumption of equilibrium binding and 1:1 stoichiometry. Competitive binding and transport of NH+4 is included within this model. Ion affinities and permeation velocities were selected in a least-squares fit to the kinetic parameters determined experimentally in renal membrane vesicles (Aronson, P.S., M.A. Suhm, and J. Nee. 1983. Journal of Biological Chemistry. 258:6767-6771). The modifier role of internal H+ to enhance transport beyond the expected kinetics (Aronson, P.S., J. Nee, and M. A. Suhm. 1982. Nature. 299:161-163) is represented as a velocity effect of H+ binding to a single site. This kinetic formulation of the Na+/H+ antiporter was incorporated within a model of the rat proximal tubule (Weinstein, A. M. 1994. American Journal of Physiology. 267:F237-F248) as a replacement for the representation by linear nonequilibrium thermodynamics (NET). The membrane density of the antiporter was selected to yield agreement with the rate of tubular Na+ reabsorption. Simulation of 0.5 cm of tubule predicts that the activity of the Na+/H+ antiporter is the most important force for active secretion of ammonia. Model calculations of metabolic acid-base disturbances are performed and comparison is made among antiporter representations (kinetic model, kinetic model without internal modifier, and NET formulation). It is found that the ability to sharply turn off Na+/H+ exchange in cellular alkalosis substantially eliminates the cell volume increase associated with high HCO3- conditions. In the tubule model, diminished Na+/H+ exchange in alkalosis blunts the axial decrease in luminal HCO3- and thus diminishes paracellular reabsorption of Cl-. In this way, the kinetics of the Na+/H+ antiporter could act to enhance distal delivery of Na+, Cl-, and HCO3- in acute metabolic alkalosis.</dcterms:abstract>
      <ro:compartmentOf rdf:resource="http://purl.obolibrary.org/obo/FMA_84666" />
      <ro:compartmentOf rdf:resource="http://purl.obolibrary.org/obo/FMA_74550" />
      <ro:located_in rdf:resource="http://purl.obolibrary.org/obo/FMA_17693" />
      <ro:located_in rdf:resource="http://purl.obolibrary.org/obo/FMA_70973" />
      <bqmodel:isDescribedBy rdf:resource="http://identifiers.org/doi/10.1085/jgp.105.5.617" />
      <dcterms:keyword>Na+/H+ antiporter</dcterms:keyword>
      <dcterms:keyword>ion transport</dcterms:keyword>
      <dcterms:keyword>NHE3</dcterms:keyword>
    </rdf:Description>
    <rdf:Description rdf:about="#NHE3.K_NHE3_H">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_16">
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#process_2" dcterms:description="" />
    <rdf:Description rdf:about="#Concentrations.C_ext_NH4">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_2">
          <semsim:physicalPropertyOf rdf:resource="#entity_3" />
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
      <dcterms:description>Concentration of NH4+ in the luminal compartment</dcterms:description>
    </rdf:Description>
    <rdf:Description rdf:about="#Concentrations.time" dcterms:description="Time">
      <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_01023" />
    </rdf:Description>
    <rdf:Description rdf:about="#NHE3.J_NHE3_Na">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_18">
          <semsim:physicalPropertyOf>
            <rdf:Description rdf:about="#process_0" dcterms:description="">
              <semsim:hasMediatorParticipant>
                <rdf:Description rdf:about="#mediator_1">
                  <semsim:hasPhysicalEntityReference rdf:resource="#entity_9" />
                </rdf:Description>
              </semsim:hasMediatorParticipant>
              <semsim:hasMediatorParticipant>
                <rdf:Description rdf:about="#mediator_0">
                  <semsim:hasPhysicalEntityReference rdf:resource="#entity_8" />
                </rdf:Description>
              </semsim:hasMediatorParticipant>
              <semsim:hasSinkParticipant>
                <rdf:Description rdf:about="#sink_0" semsim:hasMultiplier="1.0">
                  <semsim:hasPhysicalEntityReference rdf:resource="#entity_4" />
                </rdf:Description>
              </semsim:hasSinkParticipant>
              <semsim:hasSourceParticipant>
                <rdf:Description rdf:about="#source_0" semsim:hasMultiplier="1.0">
                  <semsim:hasPhysicalEntityReference rdf:resource="#entity_0" />
                </rdf:Description>
              </semsim:hasSourceParticipant>
              <semsim:name>Na+ flow through apical plasma membrane</semsim:name>
            </rdf:Description>
          </semsim:physicalPropertyOf>
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00593" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
      <dcterms:description>Flux of Na+ from luminal to cytosol through apical plasma membrane</dcterms:description>
    </rdf:Description>
    <rdf:Description rdf:about="#NHE3.C_ext_H">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_10">
          <semsim:physicalPropertyOf rdf:resource="#entity_2" />
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
      <dcterms:description>Concentration of H+ in the luminal compartment</dcterms:description>
    </rdf:Description>
    <rdf:Description rdf:about="#Concentrations.C_ext_H">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_1">
          <semsim:physicalPropertyOf rdf:resource="#entity_2" />
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
      <dcterms:description>Concentration of H+ in the luminal compartment</dcterms:description>
    </rdf:Description>
    <rdf:Description rdf:about="#NHE3.C_ext_NH4">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_11">
          <semsim:physicalPropertyOf rdf:resource="#entity_3" />
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
      <dcterms:description>Concentration of NH4+ in the luminal compartment</dcterms:description>
    </rdf:Description>
    <rdf:Description rdf:about="#Concentrations.C_int_Na">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_3">
          <semsim:physicalPropertyOf rdf:resource="#entity_4" />
          <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
      <dcterms:description>Concentration of Na+ in the cytosol compartment</dcterms:description>
    </rdf:Description>
    <rdf:Description rdf:about="#process_1" dcterms:description="" />
  </rdf:RDF>
</model>