def model modelName as
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp total_transepithelial_sodium_flux using comp total_transepithelial_sodium_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp mc_chloride_flux using comp mc_chloride_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp mc_sodium_flux using comp mc_sodium_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp total_transepithelial_potassium_flux using comp total_transepithelial_potassium_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp mc_potassium_flux using comp mc_potassium_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp sc_potassium_flux using comp sc_potassium_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp solute_concentrations using comp solute_concentrations;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp solute_concentrations using comp solute_concentrations;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp sc_chloride_flux using comp sc_chloride_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp solute_concentrations using comp solute_concentrations;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp ms_sodium_flux using comp ms_sodium_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp ms_potassium_flux using comp ms_potassium_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp sc_potassium_flux using comp sc_potassium_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp ms_chloride_flux using comp ms_chloride_flux;
  enddef;
  def unit mmol_per_cm3 as
    unit metre {expo: -3, pref: centi};
    unit mole {pref: milli};
  enddef;
  def unit flux as
    unit metre {expo: -3, pref: centi};
    unit mole {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit J_per_mmol as
    unit kelvin {expo: -1};
    unit joule;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit C_per_mmol as
    unit mole {expo: -1, pref: milli};
    unit coulomb;
  enddef;
  def unit cm_per_s as
    unit second {expo: -1};
    unit metre {pref: centi};
  enddef;

  def comp environment as
    var time: second {interface: public};
  enddef;

  def comp lumen as
    var C_m_Na: mmol_per_cm3 {init: 0.05, interface: public};
    var C_m_Cl: mmol_per_cm3 {init: 0.03, interface: public};
    var C_m_K: mmol_per_cm3 {init: 0.002, interface: public};
    var J_mc_Na: flux {interface: public};
    var J_mc_Cl: flux {interface: public};
    var J_mc_K: flux {interface: public};
    var G_mc_Na: flux {interface: public};
    var G_mc_Cl: flux {interface: public};
    var G_mc_K: flux {interface: public};
    var G_ms_Na: flux {interface: public};
    var G_ms_Cl: flux {interface: public};
    var G_ms_K: flux {interface: public};
    // concentration of solutes from other component to calculate channels and diffusive fluxes equation
    var C_c_Na: mmol_per_cm3 {interface: public};
    var C_c_Cl: mmol_per_cm3 {interface: public};
    var C_c_K: mmol_per_cm3 {interface: public};
    var C_s_Na: mmol_per_cm3 {interface: public};
    var C_s_Cl: mmol_per_cm3 {interface: public};
    var C_s_K: mmol_per_cm3 {interface: public};
    // variables from the epithelial component to calculate channels and diffusive fluxes equation
    var RT: J_per_mmol {interface: public};
    var F: C_per_mmol {interface: public};
    var P_mc_Na: cm_per_s {interface: public};
    var P_mc_Cl: cm_per_s {interface: public};
    var P_mc_K: cm_per_s {interface: public};
    var psi_m: millivolt {interface: public};
    var psi_c: millivolt {interface: public};
    var psi_s: millivolt {interface: public};
    var P_ms_Na: cm_per_s {interface: public};
    var P_ms_Cl: cm_per_s {interface: public};
    var P_ms_K: cm_per_s {interface: public};
    var time: second {interface: public};
    // Total fluxes in the luminal compartment
    var J_Na_lumen: flux {interface: public};
    var J_Cl_lumen: flux {interface: public};
    var J_K_lumen: flux {interface: public};
    // Math component
    ode(C_m_Na, time) = +(-J_mc_Na);
    ode(C_m_Cl, time) = -J_mc_Cl+(-J_mc_Cl);
    ode(C_m_K, time) = +(-J_mc_K);
    G_mc_Na = P_mc_Na*(F*(psi_m-psi_c)/RT)*((C_m_Na-C_c_Na*exp(-(F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_c))));
    G_mc_Cl = P_mc_Cl*(-1.0{dimensionless}*F*(psi_m-psi_c)/RT)*((C_m_Cl-C_c_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_c))));
    G_mc_K = P_mc_K*(F*(psi_m-psi_c)/RT)*((C_m_K-C_c_K*exp(-(F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_c))));
    G_ms_Na = P_ms_Na*(F*(psi_m-psi_s)/RT)*((C_m_Na-C_s_Na*exp(-(F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_s))));
    G_ms_K = P_ms_K*(F*(psi_m-psi_s)/RT)*((C_m_K-C_s_K*exp(-(F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_s))));
    G_ms_Cl = P_ms_Cl*(-1.0{dimensionless}*F*(psi_m-psi_s)/RT)*((C_m_Cl-C_s_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_s))));
    J_Na_lumen = -J_mc_Na+(-G_mc_Na)+(-G_ms_Na);
    J_Cl_lumen = -J_mc_Cl+(-J_mc_Cl)+(-G_mc_Cl)+(-G_ms_Cl);
    J_K_lumen = -J_mc_K+(-G_mc_K)+(-G_ms_K);
  enddef;

  def comp cytosol as
    var C_c_Na: mmol_per_cm3 {init: 0.0164, interface: public};
    var C_c_Cl: mmol_per_cm3 {init: 0.0203, interface: public};
    var C_c_K: mmol_per_cm3 {init: 0.1637, interface: public};
    var J_mc_Na: flux {interface: public};
    var J_mc_Cl: flux {interface: public};
    var J_mc_K: flux {interface: public};
    var G_mc_Na: flux {interface: public};
    var G_mc_Cl: flux {interface: public};
    var G_mc_K: flux {interface: public};
    var J_sc_Na: flux {interface: public};
    var J_sc_K: flux {interface: public};
    var G_sc_Cl: flux {interface: public};
    var G_sc_K: flux {interface: public};
    // concentration of solutes from other component to calculate channels and diffusive fluxes equation
    var C_m_Na: mmol_per_cm3 {interface: public};
    var C_m_Cl: mmol_per_cm3 {interface: public};
    var C_m_K: mmol_per_cm3 {interface: public};
    var C_s_Na: mmol_per_cm3 {interface: public};
    var C_s_Cl: mmol_per_cm3 {interface: public};
    var C_s_K: mmol_per_cm3 {interface: public};
    // variables from the epithelial component to calculate channels and diffusive fluxes equation
    var RT: J_per_mmol {interface: public};
    var F: C_per_mmol {interface: public};
    var P_mc_Na: cm_per_s {interface: public};
    var P_mc_Cl: cm_per_s {interface: public};
    var P_mc_K: cm_per_s {interface: public};
    var psi_m: millivolt {interface: public};
    var psi_c: millivolt {interface: public};
    var psi_s: millivolt {interface: public};
    var P_sc_Cl: cm_per_s {interface: public};
    var P_sc_K: cm_per_s {interface: public};
    var time: second {interface: public};
    // Total fluxes in the cytosol compartment
    var J_Na_cytosol: flux {interface: public};
    var J_Cl_cytosol: flux {interface: public};
    var J_K_cytosol: flux {interface: public};
    // Math component
    ode(C_c_Na, time) = +J_mc_Na+(-J_sc_Na);
    ode(C_c_Cl, time) = +J_mc_Cl+(+J_mc_Cl);
    ode(C_c_K, time) = +J_mc_K+(+J_sc_K);
    G_mc_Na = P_mc_Na*(F*(psi_m-psi_c)/RT)*((C_m_Na-C_c_Na*exp(-(F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_c))));
    G_mc_Cl = P_mc_Cl*(-1.0{dimensionless}*F*(psi_m-psi_c)/RT)*((C_m_Cl-C_c_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_c))));
    G_mc_K = P_mc_K*(F*(psi_m-psi_c)/RT)*((C_m_K-C_c_K*exp(-(F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_c))));
    G_sc_K = P_sc_K*(F*(psi_s-psi_c)/RT)*((C_s_K-C_c_K*exp(-(F/RT)*(psi_s-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_s-psi_c))));
    G_sc_Cl = P_sc_Cl*(-1.0{dimensionless}*F*(psi_s-psi_c)/RT)*((C_s_Cl-C_c_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_s-psi_c)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_s-psi_c))));
    J_Na_cytosol = +J_mc_Na+(+G_mc_Na)+(-J_sc_Na);
    J_Cl_cytosol = +J_mc_Cl+(+J_mc_Cl)+(+G_mc_Cl)+(+G_sc_Cl);
    J_K_cytosol = +J_mc_K+(+G_mc_K)+(+J_sc_K)+(+G_sc_K);
  enddef;

  def comp interstitialfluid as
    var C_s_Na: mmol_per_cm3 {init: 1.438E-1, interface: public};
    var C_s_K: mmol_per_cm3 {init: 4.25E-3, interface: public};
    var C_s_Cl: mmol_per_cm3 {init: 1.12E-1, interface: public};
    var J_sc_Na: flux {interface: public};
    var J_sc_K: flux {interface: public};
    var G_sc_Cl: flux {interface: public};
    var G_sc_K: flux {interface: public};
    var G_ms_Na: flux {interface: public};
    var G_ms_Cl: flux {interface: public};
    var G_ms_K: flux {interface: public};
    // concentration of solutes from other component to calculate channels and diffusive fluxes equation
    var C_m_Na: mmol_per_cm3 {interface: public};
    var C_m_K: mmol_per_cm3 {interface: public};
    var C_m_Cl: mmol_per_cm3 {interface: public};
    var C_c_K: mmol_per_cm3 {interface: public};
    var C_c_Cl: mmol_per_cm3 {interface: public};
    // variables from the epithelial component to calculate channels and diffusive fluxes equation
    var RT: J_per_mmol {interface: public};
    var F: C_per_mmol {interface: public};
    var psi_m: millivolt {interface: public};
    var psi_c: millivolt {interface: public};
    var psi_s: millivolt {interface: public};
    var P_sc_Cl: cm_per_s {interface: public};
    var P_sc_K: cm_per_s {interface: public};
    var P_ms_Na: cm_per_s {interface: public};
    var P_ms_Cl: cm_per_s {interface: public};
    var P_ms_K: cm_per_s {interface: public};
    var time: second {interface: public};
    // Total fluxes in the interstitial fluid compartment
    var J_Na_interstitialfluid: flux {interface: public};
    var J_Cl_interstitialfluid: flux {interface: public};
    var J_K_interstitialfluid: flux {interface: public};
    // Math component
    ode(C_s_Na, time) = +(+J_sc_Na);
    ode(C_s_K, time) = +(-J_sc_K);
    G_ms_Na = P_ms_Na*(F*(psi_m-psi_s)/RT)*((C_m_Na-C_s_Na*exp(-(F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_s))));
    G_ms_K = P_ms_K*(F*(psi_m-psi_s)/RT)*((C_m_K-C_s_K*exp(-(F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_s))));
    G_ms_Cl = P_ms_Cl*(-1.0{dimensionless}*F*(psi_m-psi_s)/RT)*((C_m_Cl-C_s_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_s))));
    G_sc_K = P_sc_K*(F*(psi_s-psi_c)/RT)*((C_s_K-C_c_K*exp(-(F/RT)*(psi_s-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_s-psi_c))));
    G_sc_Cl = P_sc_Cl*(-1.0{dimensionless}*F*(psi_s-psi_c)/RT)*((C_s_Cl-C_c_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_s-psi_c)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_s-psi_c))));
    J_Na_interstitialfluid = +J_sc_Na+(+G_ms_Na);
    J_Cl_interstitialfluid = -G_sc_Cl+(+G_ms_Cl);
    J_K_interstitialfluid = -J_sc_K+(-G_sc_K)+(+G_ms_K);
  enddef;
  // epithelial component to encapsulate lumen, cytosol and interstitial fluid compartment and to calculate channels and diffusive fluxes equation

  def comp epithelial as
    var RT: J_per_mmol {init: 2.579, interface: public_and_private};
    var F: C_per_mmol {init: 96.48, interface: public_and_private};
    var P_mc_Na: cm_per_s {init: 3.27E-6, interface: public_and_private};
    var P_mc_Cl: cm_per_s {init: 1.43E-6, interface: public_and_private};
    var P_mc_K: cm_per_s {init: 4.90E-7, interface: public_and_private};
    var psi_m: millivolt {init: -28.0, interface: public_and_private};
    var psi_c: millivolt {init: -86.4, interface: public_and_private};
    var psi_s: millivolt {init: 0.0, interface: public_and_private};
    var P_sc_Cl: cm_per_s {init: 9.16E-5, interface: public_and_private};
    var P_sc_K: cm_per_s {init: 4.74E-4, interface: public_and_private};
    var P_ms_Na: cm_per_s {init: 4.80E-6, interface: public_and_private};
    var P_ms_Cl: cm_per_s {init: 2.40E-6, interface: public_and_private};
    var P_ms_K: cm_per_s {init: 4.80E-6, interface: public_and_private};
  enddef;
  // encapsulate lumen, cytosol and interstitial fluid component inside epithelial component
  def group as encapsulation for
    comp epithelial incl
      comp lumen incl
        comp total_transepithelial_sodium_flux;
        comp solute_concentrations;
        comp total_transepithelial_potassium_flux;
        comp mc_sodium_flux;
        comp mc_chloride_flux;
        comp mc_potassium_flux;
        comp ms_sodium_flux;
        comp ms_chloride_flux;
        comp ms_potassium_flux;
      endcomp;
      comp cytosol incl
        comp total_transepithelial_sodium_flux;
        comp solute_concentrations;
        comp total_transepithelial_potassium_flux;
        comp mc_sodium_flux;
        comp mc_chloride_flux;
        comp mc_potassium_flux;
        comp sc_potassium_flux;
        comp sc_chloride_flux;
      endcomp;
      comp interstitialfluid incl
        comp solute_concentrations;
        comp sc_potassium_flux;
        comp sc_chloride_flux;
        comp ms_sodium_flux;
        comp ms_chloride_flux;
        comp ms_potassium_flux;
      endcomp;
    endcomp;
  enddef;
  // mapping connections between components
  def map between epithelial and lumen for
    vars RT and RT;
    vars F and F;
    vars P_mc_Na and P_mc_Na;
    vars P_mc_Cl and P_mc_Cl;
    vars P_mc_K and P_mc_K;
    vars P_si_m and P_si_m;
    vars P_si_c and P_si_c;
    vars P_si_s and P_si_s;
    vars P_ms_Na and P_ms_Na;
    vars P_ms_Cl and P_ms_Cl;
    vars P_ms_K and P_ms_K;
  enddef;
  def map between epithelial and cytosol for
    vars RT and RT;
    vars F and F;
    vars P_mc_Na and P_mc_Na;
    vars P_mc_Cl and P_mc_Cl;
    vars P_mc_K and P_mc_K;
    vars P_si_m and P_si_m;
    vars P_si_c and P_si_c;
    vars P_si_s and P_si_s;
    vars P_sc_Cl and P_sc_Cl;
    vars P_sc_K and P_sc_K;
  enddef;
  def map between epithelial and interstitialfluid for
    vars RT and RT;
    vars F and F;
    vars P_si_m and P_si_m;
    vars P_si_c and P_si_c;
    vars P_si_s and P_si_s;
    vars P_ms_Na and P_ms_Na;
    vars P_ms_Cl and P_ms_Cl;
    vars P_ms_K and P_ms_K;
    vars P_sc_Cl and P_sc_Cl;
    vars P_sc_K and P_sc_K;
  enddef;
  def map between lumen and total_transepithelial_sodium_flux for
    vars J_mc_Na and J_mc_Na;
    vars time and time;
  enddef;
  def map between lumen and solute_concentrations for
    vars J_mc_Cl and J_mc_Cl;
    vars time and time;
  enddef;
  def map between lumen and total_transepithelial_potassium_flux for
    vars J_mc_K and J_mc_K;
    vars time and time;
  enddef;
  def map between lumen and mc_sodium_flux for
    vars G_mc_Na and G_mc_Na;
    vars time and time;
  enddef;
  def map between lumen and mc_chloride_flux for
    vars G_mc_Cl and G_mc_Cl;
    vars time and time;
  enddef;
  def map between lumen and mc_potassium_flux for
    vars G_mc_K and G_mc_K;
    vars time and time;
  enddef;
  def map between lumen and ms_sodium_flux for
    vars G_ms_Na and G_ms_Na;
    vars time and time;
  enddef;
  def map between lumen and ms_chloride_flux for
    vars G_ms_Cl and G_ms_Cl;
    vars time and time;
  enddef;
  def map between lumen and ms_potassium_flux for
    vars G_ms_K and G_ms_K;
    vars time and time;
  enddef;
  def map between cytosol and total_transepithelial_sodium_flux for
    vars J_mc_Na and J_mc_Na;
    vars time and time;
  enddef;
  def map between cytosol and solute_concentrations for
    vars J_mc_Cl and J_mc_Cl;
    vars J_sc_Na and J_sc_Na;
    vars time and time;
  enddef;
  def map between cytosol and total_transepithelial_potassium_flux for
    vars J_mc_K and J_mc_K;
    vars time and time;
  enddef;
  def map between cytosol and mc_sodium_flux for
    vars G_mc_Na and G_mc_Na;
    vars time and time;
  enddef;
  def map between cytosol and mc_chloride_flux for
    vars G_mc_Cl and G_mc_Cl;
    vars time and time;
  enddef;
  def map between cytosol and mc_potassium_flux for
    vars G_mc_K and G_mc_K;
    vars time and time;
  enddef;
  def map between cytosol and sc_potassium_flux for
    vars J_sc_K and J_sc_K;
    vars time and time;
  enddef;
  def map between cytosol and sc_chloride_flux for
    vars G_sc_Cl and G_sc_Cl;
    vars time and time;
  enddef;
  def map between cytosol and sc_potassium_flux for
    vars G_sc_K and G_sc_K;
    vars time and time;
  enddef;
  def map between interstitialfluid and solute_concentrations for
    vars J_sc_Na and J_sc_Na;
    vars time and time;
  enddef;
  def map between interstitialfluid and sc_potassium_flux for
    vars J_sc_K and J_sc_K;
    vars time and time;
  enddef;
  def map between interstitialfluid and sc_chloride_flux for
    vars G_sc_Cl and G_sc_Cl;
    vars time and time;
  enddef;
  def map between interstitialfluid and sc_potassium_flux for
    vars G_sc_K and G_sc_K;
    vars time and time;
  enddef;
  def map between interstitialfluid and ms_sodium_flux for
    vars G_ms_Na and G_ms_Na;
    vars time and time;
  enddef;
  def map between interstitialfluid and ms_chloride_flux for
    vars G_ms_Cl and G_ms_Cl;
    vars time and time;
  enddef;
  def map between interstitialfluid and ms_potassium_flux for
    vars G_ms_K and G_ms_K;
    vars time and time;
  enddef;
enddef;
