def model epithelialModel as
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp mc_chloride_flux using comp mc_chloride_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/weinstein_1995.cellml" for
    comp NHE3 using comp NHE3;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp ms_chloride_flux using comp ms_chloride_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp sc_chloride_flux using comp sc_chloride_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp mc_potassium_flux using comp mc_potassium_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp total_transepithelial_sodium_flux using comp total_transepithelial_sodium_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp total_transepithelial_potassium_flux using comp total_transepithelial_potassium_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp solute_concentrations using comp solute_concentrations;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/mackenzie_1996-mouse-baso.cellml" for
    comp NBC_current using comp NBC_current;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp ms_potassium_flux using comp ms_potassium_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp mc_sodium_flux using comp mc_sodium_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp sc_potassium_flux using comp sc_potassium_flux;
  enddef;
  def import using "https://models.physiomeproject.org/workspace/267/rawfile/HEAD/chang_fujita_b_1999.cellml" for
    comp ms_sodium_flux using comp ms_sodium_flux;
  enddef;
  def unit mM as
    unit litre {expo: -1};
    unit mole {pref: milli};
  enddef;
  def unit nmol_per_s_per_cm2 as
    unit nmol;
    unit cm2 {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mmol_per_cm3 as
    unit mole {pref: milli};
    unit metre {expo: -3, pref: centi};
  enddef;
  def unit flux as
    unit mole {pref: milli};
    unit second {expo: -1};
    unit metre {expo: -3, pref: centi};
  enddef;
  def unit J_per_mmol as
    unit mole {expo: -1, pref: milli};
    unit kelvin {expo: -1};
    unit joule;
  enddef;
  def unit C_per_mmol as
    unit coulomb;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit cm_per_s as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit M as
    unit litre {expo: -1};
    unit mole;
  enddef;
  def unit umol_per_second as
    unit umol;
    unit second {expo: -1};
  enddef;

  def comp epithelial as
    var RT: J_per_mmol {init: 2.579, interface: public_and_private};
    var F: C_per_mmol {init: 96.48, interface: public_and_private};
    var psi_c: millivolt {init: -86.4, interface: public_and_private};
    var psi_m: millivolt {init: -28.0, interface: public_and_private};
    var P_mc_Na: cm_per_s {init: 3.27E-6, interface: public_and_private};
    var P_mc_Cl: cm_per_s {init: 1.43E-6, interface: public_and_private};
    var P_mc_K: cm_per_s {init: 4.90E-7, interface: public_and_private};
    var P_ms_Na: cm_per_s {init: 4.80E-6, interface: public_and_private};
    var psi_s: millivolt {init: 0.0, interface: public_and_private};
    var P_ms_Cl: cm_per_s {init: 2.40E-6, interface: public_and_private};
    var P_ms_K: cm_per_s {init: 4.80E-6, interface: public_and_private};
    var P_sc_Cl: cm_per_s {init: 9.16E-5, interface: public_and_private};
    var P_sc_K: cm_per_s {init: 4.74E-4, interface: public_and_private};
  enddef;

  def comp environment as
    var time: second {interface: public};
  enddef;

  def comp lumen as
    var C_ext_Na: mM {init: 140, interface: public};
    var J_NHE3_Na: nmol_per_s_per_cm2 {interface: public};
    var C_m_Na: mmol_per_cm3 {init: 0.05, interface: public};
    var J_mc_Na: flux {interface: public};
    var C_m_Cl: mmol_per_cm3 {init: 0.03, interface: public};
    var J_mc_Cl: flux {interface: public};
    var C_m_K: mmol_per_cm3 {init: 0.002, interface: public};
    var J_mc_K: flux {interface: public};
    var G_mc_Na: flux {interface: public};
    var C_c_Na: mmol_per_cm3 {interface: public};
    var RT: J_per_mmol {interface: public};
    var F: C_per_mmol {interface: public};
    var psi_c: millivolt {interface: public};
    var psi_m: millivolt {interface: public};
    var P_mc_Na: cm_per_s {interface: public};
    var G_mc_Cl: flux {interface: public};
    var C_c_Cl: mmol_per_cm3 {interface: public};
    var P_mc_Cl: cm_per_s {interface: public};
    var G_mc_K: flux {interface: public};
    var C_c_K: mmol_per_cm3 {interface: public};
    var P_mc_K: cm_per_s {interface: public};
    var G_ms_Na: flux {interface: public};
    var C_s_Na: mmol_per_cm3 {interface: public};
    var P_ms_Na: cm_per_s {interface: public};
    var psi_s: millivolt {interface: public};
    var G_ms_Cl: flux {interface: public};
    var P_ms_Cl: cm_per_s {interface: public};
    var C_s_Cl: mmol_per_cm3 {interface: public};
    var G_ms_K: flux {interface: public};
    var C_s_K: mmol_per_cm3 {interface: public};
    var P_ms_K: cm_per_s {interface: public};
    var time: second {interface: public};
    var J_Cl_lumen: flux {interface: public};
    var J_K_lumen: flux {interface: public};
    var J_Na_lumen: flux {interface: public};
    G_mc_Na = P_mc_Na*(F*(psi_m-psi_c)/RT)*((C_m_Na-C_c_Na*exp(-(F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_c))));
    G_mc_Cl = P_mc_Cl*(-1.0{dimensionless}*F*(psi_m-psi_c)/RT)*((C_m_Cl-C_c_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_c))));
    G_mc_K = P_mc_K*(F*(psi_m-psi_c)/RT)*((C_m_K-C_c_K*exp(-(F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_c))));
    G_ms_Na = P_ms_Na*(F*(psi_m-psi_s)/RT)*((C_m_Na-C_s_Na*exp(-(F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_s))));
    G_ms_Cl = P_ms_Cl*(-1.0{dimensionless}*F*(psi_m-psi_s)/RT)*((C_m_Cl-C_s_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_s))));
    G_ms_K = P_ms_K*(F*(psi_m-psi_s)/RT)*((C_m_K-C_s_K*exp(-(F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_s))));
    ode(C_ext_Na, time) = +(-J_NHE3_Na);
    ode(C_m_Na, time) = +(-J_mc_Na);
    ode(C_m_Cl, time) = -J_mc_Cl+(-J_mc_Cl);
    ode(C_m_K, time) = +(-J_mc_K);
    J_Na_lumen = -J_NHE3_Na+(-J_mc_Na)+(-G_mc_Na)+(-G_ms_Na);
    J_Cl_lumen = -J_mc_Cl+(-J_mc_Cl)+(-G_mc_Cl)+(-G_ms_Cl);
    J_K_lumen = -J_mc_K+(-G_mc_K)+(-G_ms_K);
  enddef;

  def comp cytosol as
    var C_int_Na: mM {init: 19.6, interface: public};
    var J_NHE3_Na: nmol_per_s_per_cm2 {interface: public};
    var Na_i: M {init: 10e-3, interface: public};
    var J_Na: umol_per_second {interface: public};
    var C_c_Na: mmol_per_cm3 {init: 0.0164, interface: public};
    var J_mc_Na: flux {interface: public};
    var C_c_Cl: mmol_per_cm3 {init: 0.0203, interface: public};
    var J_mc_Cl: flux {interface: public};
    var C_c_K: mmol_per_cm3 {init: 0.1637, interface: public};
    var J_mc_K: flux {interface: public};
    var G_mc_Na: flux {interface: public};
    var C_m_Na: mmol_per_cm3 {interface: public};
    var RT: J_per_mmol {interface: public};
    var F: C_per_mmol {interface: public};
    var psi_c: millivolt {interface: public};
    var psi_m: millivolt {interface: public};
    var P_mc_Na: cm_per_s {interface: public};
    var G_mc_Cl: flux {interface: public};
    var P_mc_Cl: cm_per_s {interface: public};
    var C_m_Cl: mmol_per_cm3 {interface: public};
    var G_mc_K: flux {interface: public};
    var C_m_K: mmol_per_cm3 {interface: public};
    var P_mc_K: cm_per_s {interface: public};
    var J_sc_Na: flux {interface: public};
    var J_sc_K: flux {interface: public};
    var G_sc_Cl: flux {interface: public};
    var P_sc_Cl: cm_per_s {interface: public};
    var psi_s: millivolt {interface: public};
    var C_s_Cl: mmol_per_cm3 {interface: public};
    var G_sc_K: flux {interface: public};
    var C_s_K: mmol_per_cm3 {interface: public};
    var P_sc_K: cm_per_s {interface: public};
    var time: second {interface: public};
    var J_Cl_cytosol: flux {interface: public};
    var J_K_cytosol: flux {interface: public};
    var J_Na_cytosol: flux {interface: public};
    G_mc_Na = P_mc_Na*(F*(psi_m-psi_c)/RT)*((C_m_Na-C_c_Na*exp(-(F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_c))));
    G_mc_Cl = P_mc_Cl*(-1.0{dimensionless}*F*(psi_m-psi_c)/RT)*((C_m_Cl-C_c_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_c))));
    G_mc_K = P_mc_K*(F*(psi_m-psi_c)/RT)*((C_m_K-C_c_K*exp(-(F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_c))));
    G_sc_Cl = P_sc_Cl*(-1.0{dimensionless}*F*(psi_s-psi_c)/RT)*((C_s_Cl-C_c_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_s-psi_c)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_s-psi_c))));
    G_sc_K = P_sc_K*(F*(psi_s-psi_c)/RT)*((C_s_K-C_c_K*exp(-(F/RT)*(psi_s-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_s-psi_c))));
    ode(C_int_Na, time) = +(+J_NHE3_Na);
    ode(Na_i, time) = -J_Na+(+J_Na);
    ode(C_c_Na, time) = +J_mc_Na+(-J_sc_Na);
    ode(C_c_Cl, time) = +J_mc_Cl+(+J_mc_Cl);
    ode(C_c_K, time) = +J_mc_K+(+J_sc_K);
    J_Na_cytosol = +J_NHE3_Na+(-J_Na)+(+J_Na)+(+J_mc_Na)+(+G_mc_Na)+(-J_sc_Na);
    J_Cl_cytosol = +J_mc_Cl+(+J_mc_Cl)+(+G_mc_Cl)+(+G_sc_Cl);
    J_K_cytosol = +J_mc_K+(+G_mc_K)+(+J_sc_K)+(+G_sc_K);
  enddef;

  def comp interstitialfluid as
    var Na_o: M {init: 100e-3, interface: public};
    var J_Na: umol_per_second {interface: public};
    var C_s_Na: mmol_per_cm3 {init: 1.438E-1, interface: public};
    var J_sc_Na: flux {interface: public};
    var C_s_K: mmol_per_cm3 {init: 4.25E-3, interface: public};
    var J_sc_K: flux {interface: public};
    var C_s_Cl: mmol_per_cm3 {init: 1.12E-1, interface: public};
    var G_sc_Cl: flux {interface: public};
    var C_c_Cl: mmol_per_cm3 {interface: public};
    var RT: J_per_mmol {interface: public};
    var F: C_per_mmol {interface: public};
    var psi_c: millivolt {interface: public};
    var P_sc_Cl: cm_per_s {interface: public};
    var psi_s: millivolt {interface: public};
    var G_sc_K: flux {interface: public};
    var C_c_K: mmol_per_cm3 {interface: public};
    var P_sc_K: cm_per_s {interface: public};
    var G_ms_Na: flux {interface: public};
    var C_m_Na: mmol_per_cm3 {interface: public};
    var P_ms_Na: cm_per_s {interface: public};
    var psi_m: millivolt {interface: public};
    var G_ms_Cl: flux {interface: public};
    var P_ms_Cl: cm_per_s {interface: public};
    var C_m_Cl: mmol_per_cm3 {interface: public};
    var G_ms_K: flux {interface: public};
    var C_m_K: mmol_per_cm3 {interface: public};
    var P_ms_K: cm_per_s {interface: public};
    var time: second {interface: public};
    var J_Cl_interstitialfluid: flux {interface: public};
    var J_K_interstitialfluid: flux {interface: public};
    var J_Na_interstitialfluid: flux {interface: public};
    G_sc_Cl = P_sc_Cl*(-1.0{dimensionless}*F*(psi_s-psi_c)/RT)*((C_s_Cl-C_c_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_s-psi_c)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_s-psi_c))));
    G_sc_K = P_sc_K*(F*(psi_s-psi_c)/RT)*((C_s_K-C_c_K*exp(-(F/RT)*(psi_s-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_s-psi_c))));
    G_ms_Na = P_ms_Na*(F*(psi_m-psi_s)/RT)*((C_m_Na-C_s_Na*exp(-(F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_s))));
    G_ms_Cl = P_ms_Cl*(-1.0{dimensionless}*F*(psi_m-psi_s)/RT)*((C_m_Cl-C_s_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_s))));
    G_ms_K = P_ms_K*(F*(psi_m-psi_s)/RT)*((C_m_K-C_s_K*exp(-(F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_s))));
    ode(Na_o, time) = +J_Na+(-J_Na);
    ode(C_s_Na, time) = +(+J_sc_Na);
    ode(C_s_K, time) = +(-J_sc_K);
    J_Na_interstitialfluid = +J_Na+(-J_Na)+(+J_sc_Na)+(+G_ms_Na);
    J_K_interstitialfluid = -J_sc_K+(-G_sc_K)+(+G_ms_K);
    J_Cl_interstitialfluid = -G_sc_Cl+(+G_ms_Cl);
  enddef;
  def map between epithelial and mc_sodium_flux for
    vars RT and RT;
    vars F and F;
    vars psi_c and psi_c;
    vars psi_m and psi_m;
    vars P_mc_Na and P_mc_Na;
  enddef;
  def map between epithelial and mc_chloride_flux for
    vars RT and RT;
    vars F and F;
    vars psi_c and psi_c;
    vars psi_m and psi_m;
    vars P_mc_Cl and P_mc_Cl;
  enddef;
  def map between epithelial and mc_potassium_flux for
    vars RT and RT;
    vars F and F;
    vars psi_c and psi_c;
    vars psi_m and psi_m;
    vars P_mc_K and P_mc_K;
  enddef;
  def map between epithelial and ms_sodium_flux for
    vars RT and RT;
    vars F and F;
    vars psi_m and psi_m;
    vars P_ms_Na and P_ms_Na;
    vars psi_s and psi_s;
  enddef;
  def map between epithelial and ms_chloride_flux for
    vars RT and RT;
    vars F and F;
    vars psi_m and psi_m;
    vars psi_s and psi_s;
    vars P_ms_Cl and P_ms_Cl;
  enddef;
  def map between epithelial and ms_potassium_flux for
    vars RT and RT;
    vars F and F;
    vars psi_m and psi_m;
    vars psi_s and psi_s;
    vars P_ms_K and P_ms_K;
  enddef;
  def map between epithelial and sc_potassium_flux for
    vars RT and RT;
    vars F and F;
    vars psi_c and psi_c;
    vars psi_s and psi_s;
    vars P_sc_K and P_sc_K;
  enddef;
  def map between epithelial and sc_chloride_flux for
    vars RT and RT;
    vars F and F;
    vars psi_c and psi_c;
    vars psi_s and psi_s;
    vars P_sc_Cl and P_sc_Cl;
  enddef;
  def map between epithelial and lumen for
    vars RT and RT;
    vars F and F;
    vars psi_c and psi_c;
    vars psi_m and psi_m;
    vars P_mc_Na and P_mc_Na;
    vars P_mc_Cl and P_mc_Cl;
    vars P_mc_K and P_mc_K;
    vars P_ms_Na and P_ms_Na;
    vars psi_s and psi_s;
    vars P_ms_Cl and P_ms_Cl;
    vars P_ms_K and P_ms_K;
  enddef;
  def map between epithelial and cytosol for
    vars RT and RT;
    vars F and F;
    vars psi_c and psi_c;
    vars psi_m and psi_m;
    vars P_mc_Na and P_mc_Na;
    vars P_mc_Cl and P_mc_Cl;
    vars P_mc_K and P_mc_K;
    vars psi_s and psi_s;
    vars P_sc_Cl and P_sc_Cl;
    vars P_sc_K and P_sc_K;
  enddef;
  def map between epithelial and interstitialfluid for
    vars RT and RT;
    vars F and F;
    vars psi_c and psi_c;
    vars psi_m and psi_m;
    vars P_ms_Na and P_ms_Na;
    vars psi_s and psi_s;
    vars P_ms_Cl and P_ms_Cl;
    vars P_ms_K and P_ms_K;
    vars P_sc_Cl and P_sc_Cl;
    vars P_sc_K and P_sc_K;
  enddef;
  def map between epithelial and NBC_current for
    vars F and F;
  enddef;
  def map between NHE3 and lumen for
    vars C_ext_Na and C_ext_Na;
    vars J_NHE3_Na and J_NHE3_Na;
  enddef;
  def map between NHE3 and cytosol for
    vars C_int_Na and C_int_Na;
    vars J_NHE3_Na and J_NHE3_Na;
  enddef;
  def map between NBC_current and mc_sodium_flux for
    vars F and F;
  enddef;
  def map between NBC_current and mc_chloride_flux for
    vars F and F;
  enddef;
  def map between NBC_current and mc_potassium_flux for
    vars F and F;
  enddef;
  def map between NBC_current and ms_sodium_flux for
    vars F and F;
  enddef;
  def map between NBC_current and ms_chloride_flux for
    vars F and F;
  enddef;
  def map between NBC_current and ms_potassium_flux for
    vars F and F;
  enddef;
  def map between NBC_current and sc_potassium_flux for
    vars F and F;
  enddef;
  def map between NBC_current and sc_chloride_flux for
    vars F and F;
  enddef;
  def map between NBC_current and lumen for
    vars F and F;
  enddef;
  def map between NBC_current and cytosol for
    vars F and F;
    vars J_Na and J_Na;
  enddef;
  def map between NBC_current and interstitialfluid for
    vars F and F;
    vars J_Na and J_Na;
  enddef;
  def map between NBC_current and total_transepithelial_sodium_flux for
    vars J_Na and J_Na;
  enddef;
  def map between total_transepithelial_sodium_flux and cytosol for
    vars J_Na and J_Na;
    vars J_mc_Na and J_mc_Na;
    vars time and time;
  enddef;
  def map between total_transepithelial_sodium_flux and interstitialfluid for
    vars J_Na and J_Na;
    vars time and time;
  enddef;
  def map between total_transepithelial_sodium_flux and solute_concentrations for
    vars J_mc_Na and J_mc_Na;
    vars J_ms_Na and J_ms_Na;
    vars time and time;
  enddef;
  def map between total_transepithelial_sodium_flux and mc_sodium_flux for
    vars J_mc_Na and J_mc_Na;
    vars time and time;
  enddef;
  def map between total_transepithelial_sodium_flux and lumen for
    vars J_mc_Na and J_mc_Na;
    vars time and time;
  enddef;
  def map between total_transepithelial_sodium_flux and ms_sodium_flux for
    vars J_ms_Na and J_ms_Na;
    vars time and time;
  enddef;
  def map between total_transepithelial_sodium_flux and environment for
    vars time and time;
  enddef;
  def map between total_transepithelial_sodium_flux and total_transepithelial_potassium_flux for
    vars time and time;
  enddef;
  def map between total_transepithelial_sodium_flux and mc_chloride_flux for
    vars time and time;
  enddef;
  def map between total_transepithelial_sodium_flux and mc_potassium_flux for
    vars time and time;
  enddef;
  def map between total_transepithelial_sodium_flux and ms_chloride_flux for
    vars time and time;
  enddef;
  def map between total_transepithelial_sodium_flux and ms_potassium_flux for
    vars time and time;
  enddef;
  def map between total_transepithelial_sodium_flux and sc_potassium_flux for
    vars time and time;
  enddef;
  def map between total_transepithelial_sodium_flux and sc_chloride_flux for
    vars time and time;
  enddef;
  def map between solute_concentrations and mc_sodium_flux for
    vars C_m_Na and C_m_Na;
    vars C_m_Cl and C_m_Cl;
    vars C_c_Na and C_c_Na;
    vars C_c_Cl and C_c_Cl;
    vars J_mc_Na and J_mc_Na;
    vars time and time;
  enddef;
  def map between solute_concentrations and ms_sodium_flux for
    vars C_m_Na and C_m_Na;
    vars C_s_Na and C_s_Na;
    vars J_ms_Na and J_ms_Na;
    vars time and time;
  enddef;
  def map between solute_concentrations and lumen for
    vars C_m_Na and C_m_Na;
    vars C_m_K and C_m_K;
    vars C_m_Cl and C_m_Cl;
    vars C_c_Na and C_c_Na;
    vars C_c_K and C_c_K;
    vars C_c_Cl and C_c_Cl;
    vars C_s_Na and C_s_Na;
    vars C_s_K and C_s_K;
    vars C_s_Cl and C_s_Cl;
    vars J_mc_Na and J_mc_Na;
    vars J_mc_K and J_mc_K;
    vars J_mc_Cl and J_mc_Cl;
    vars time and time;
  enddef;
  def map between solute_concentrations and cytosol for
    vars C_m_Na and C_m_Na;
    vars C_m_K and C_m_K;
    vars C_m_Cl and C_m_Cl;
    vars C_c_Na and C_c_Na;
    vars C_c_K and C_c_K;
    vars C_c_Cl and C_c_Cl;
    vars C_s_K and C_s_K;
    vars C_s_Cl and C_s_Cl;
    vars J_mc_Na and J_mc_Na;
    vars J_sc_Na and J_sc_Na;
    vars J_mc_K and J_mc_K;
    vars J_sc_K and J_sc_K;
    vars J_mc_Cl and J_mc_Cl;
    vars time and time;
  enddef;
  def map between solute_concentrations and interstitialfluid for
    vars C_m_Na and C_m_Na;
    vars C_m_K and C_m_K;
    vars C_m_Cl and C_m_Cl;
    vars C_c_K and C_c_K;
    vars C_c_Cl and C_c_Cl;
    vars C_s_Na and C_s_Na;
    vars C_s_K and C_s_K;
    vars C_s_Cl and C_s_Cl;
    vars J_sc_Na and J_sc_Na;
    vars J_sc_K and J_sc_K;
    vars time and time;
  enddef;
  def map between solute_concentrations and mc_potassium_flux for
    vars C_m_K and C_m_K;
    vars C_m_Cl and C_m_Cl;
    vars C_c_K and C_c_K;
    vars C_c_Cl and C_c_Cl;
    vars J_mc_K and J_mc_K;
    vars time and time;
  enddef;
  def map between solute_concentrations and ms_potassium_flux for
    vars C_m_K and C_m_K;
    vars C_s_K and C_s_K;
    vars J_ms_K and J_ms_K;
    vars time and time;
  enddef;
  def map between solute_concentrations and mc_chloride_flux for
    vars C_m_Cl and C_m_Cl;
    vars C_c_Cl and C_c_Cl;
    vars J_mc_Cl and J_mc_Cl;
    vars time and time;
  enddef;
  def map between solute_concentrations and ms_chloride_flux for
    vars C_m_Cl and C_m_Cl;
    vars C_s_Cl and C_s_Cl;
    vars J_ms_Cl and J_ms_Cl;
    vars time and time;
  enddef;
  def map between solute_concentrations and sc_potassium_flux for
    vars C_c_K and C_c_K;
    vars C_s_K and C_s_K;
    vars J_sc_K and J_sc_K;
    vars time and time;
  enddef;
  def map between solute_concentrations and sc_chloride_flux for
    vars C_c_Cl and C_c_Cl;
    vars C_s_Cl and C_s_Cl;
    vars J_sc_Cl and J_sc_Cl;
    vars time and time;
  enddef;
  def map between solute_concentrations and total_transepithelial_potassium_flux for
    vars J_mc_K and J_mc_K;
    vars J_ms_K and J_ms_K;
    vars time and time;
  enddef;
  def map between solute_concentrations and environment for
    vars time and time;
  enddef;
  def map between total_transepithelial_potassium_flux and mc_potassium_flux for
    vars J_mc_K and J_mc_K;
    vars time and time;
  enddef;
  def map between total_transepithelial_potassium_flux and lumen for
    vars J_mc_K and J_mc_K;
    vars time and time;
  enddef;
  def map between total_transepithelial_potassium_flux and cytosol for
    vars J_mc_K and J_mc_K;
    vars time and time;
  enddef;
  def map between total_transepithelial_potassium_flux and ms_potassium_flux for
    vars J_ms_K and J_ms_K;
    vars time and time;
  enddef;
  def map between total_transepithelial_potassium_flux and environment for
    vars time and time;
  enddef;
  def map between total_transepithelial_potassium_flux and mc_sodium_flux for
    vars time and time;
  enddef;
  def map between total_transepithelial_potassium_flux and mc_chloride_flux for
    vars time and time;
  enddef;
  def map between total_transepithelial_potassium_flux and ms_sodium_flux for
    vars time and time;
  enddef;
  def map between total_transepithelial_potassium_flux and ms_chloride_flux for
    vars time and time;
  enddef;
  def map between total_transepithelial_potassium_flux and sc_potassium_flux for
    vars time and time;
  enddef;
  def map between total_transepithelial_potassium_flux and sc_chloride_flux for
    vars time and time;
  enddef;
  def map between total_transepithelial_potassium_flux and interstitialfluid for
    vars time and time;
  enddef;
  def map between mc_sodium_flux and lumen for
    vars J_mc_Na and J_mc_Na;
    vars G_mc_Na and G_mc_Na;
    vars P_mc_Na and P_mc_Na;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Na and C_m_Na;
    vars C_c_Na and C_c_Na;
    vars C_m_Cl and C_m_Cl;
    vars C_c_Cl and C_c_Cl;
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between mc_sodium_flux and cytosol for
    vars J_mc_Na and J_mc_Na;
    vars G_mc_Na and G_mc_Na;
    vars P_mc_Na and P_mc_Na;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Na and C_m_Na;
    vars C_c_Na and C_c_Na;
    vars C_m_Cl and C_m_Cl;
    vars C_c_Cl and C_c_Cl;
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between mc_sodium_flux and mc_chloride_flux for
    vars J_mc_NaCl and J_mc_NaCl;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Cl and C_m_Cl;
    vars C_c_Cl and C_c_Cl;
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between mc_sodium_flux and environment for
    vars time and time;
  enddef;
  def map between mc_sodium_flux and mc_potassium_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Cl and C_m_Cl;
    vars C_c_Cl and C_c_Cl;
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between mc_sodium_flux and ms_sodium_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Na and C_m_Na;
    vars psi_m and psi_m;
  enddef;
  def map between mc_sodium_flux and ms_chloride_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Cl and C_m_Cl;
    vars psi_m and psi_m;
  enddef;
  def map between mc_sodium_flux and ms_potassium_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars psi_m and psi_m;
  enddef;
  def map between mc_sodium_flux and sc_potassium_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars psi_c and psi_c;
  enddef;
  def map between mc_sodium_flux and sc_chloride_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_c_Cl and C_c_Cl;
    vars psi_c and psi_c;
  enddef;
  def map between mc_sodium_flux and interstitialfluid for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Na and C_m_Na;
    vars C_m_Cl and C_m_Cl;
    vars C_c_Cl and C_c_Cl;
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between mc_chloride_flux and lumen for
    vars J_mc_Cl and J_mc_Cl;
    vars G_mc_Cl and G_mc_Cl;
    vars P_mc_Cl and P_mc_Cl;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Cl and C_m_Cl;
    vars C_c_Cl and C_c_Cl;
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between mc_chloride_flux and cytosol for
    vars J_mc_Cl and J_mc_Cl;
    vars G_mc_Cl and G_mc_Cl;
    vars P_mc_Cl and P_mc_Cl;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Cl and C_m_Cl;
    vars C_c_Cl and C_c_Cl;
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between mc_chloride_flux and environment for
    vars time and time;
  enddef;
  def map between mc_chloride_flux and mc_potassium_flux for
    vars time and time;
    vars J_mc_KCl and J_mc_KCl;
    vars RT and RT;
    vars F and F;
    vars C_m_Cl and C_m_Cl;
    vars C_c_Cl and C_c_Cl;
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between mc_chloride_flux and ms_sodium_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars psi_m and psi_m;
  enddef;
  def map between mc_chloride_flux and ms_chloride_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Cl and C_m_Cl;
    vars psi_m and psi_m;
  enddef;
  def map between mc_chloride_flux and ms_potassium_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars psi_m and psi_m;
  enddef;
  def map between mc_chloride_flux and sc_potassium_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars psi_c and psi_c;
  enddef;
  def map between mc_chloride_flux and sc_chloride_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_c_Cl and C_c_Cl;
    vars psi_c and psi_c;
  enddef;
  def map between mc_chloride_flux and interstitialfluid for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Cl and C_m_Cl;
    vars C_c_Cl and C_c_Cl;
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between mc_potassium_flux and lumen for
    vars J_mc_K and J_mc_K;
    vars G_mc_K and G_mc_K;
    vars P_mc_K and P_mc_K;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_K and C_m_K;
    vars C_c_K and C_c_K;
    vars C_m_Cl and C_m_Cl;
    vars C_c_Cl and C_c_Cl;
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between mc_potassium_flux and cytosol for
    vars J_mc_K and J_mc_K;
    vars G_mc_K and G_mc_K;
    vars P_mc_K and P_mc_K;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_K and C_m_K;
    vars C_c_K and C_c_K;
    vars C_m_Cl and C_m_Cl;
    vars C_c_Cl and C_c_Cl;
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between mc_potassium_flux and environment for
    vars time and time;
  enddef;
  def map between mc_potassium_flux and ms_sodium_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars psi_m and psi_m;
  enddef;
  def map between mc_potassium_flux and ms_chloride_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Cl and C_m_Cl;
    vars psi_m and psi_m;
  enddef;
  def map between mc_potassium_flux and ms_potassium_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_K and C_m_K;
    vars psi_m and psi_m;
  enddef;
  def map between mc_potassium_flux and sc_potassium_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_c_K and C_c_K;
    vars psi_c and psi_c;
  enddef;
  def map between mc_potassium_flux and sc_chloride_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_c_Cl and C_c_Cl;
    vars psi_c and psi_c;
  enddef;
  def map between mc_potassium_flux and interstitialfluid for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_K and C_m_K;
    vars C_c_K and C_c_K;
    vars C_m_Cl and C_m_Cl;
    vars C_c_Cl and C_c_Cl;
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between sc_potassium_flux and cytosol for
    vars J_sc_K and J_sc_K;
    vars G_sc_K and G_sc_K;
    vars P_sc_K and P_sc_K;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_s_K and C_s_K;
    vars C_c_K and C_c_K;
    vars psi_s and psi_s;
    vars psi_c and psi_c;
  enddef;
  def map between sc_potassium_flux and interstitialfluid for
    vars J_sc_K and J_sc_K;
    vars G_sc_K and G_sc_K;
    vars P_sc_K and P_sc_K;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_s_K and C_s_K;
    vars C_c_K and C_c_K;
    vars psi_s and psi_s;
    vars psi_c and psi_c;
  enddef;
  def map between sc_potassium_flux and environment for
    vars time and time;
  enddef;
  def map between sc_potassium_flux and ms_sodium_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars psi_s and psi_s;
  enddef;
  def map between sc_potassium_flux and ms_chloride_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars psi_s and psi_s;
  enddef;
  def map between sc_potassium_flux and ms_potassium_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_s_K and C_s_K;
    vars psi_s and psi_s;
  enddef;
  def map between sc_potassium_flux and sc_chloride_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars psi_s and psi_s;
    vars psi_c and psi_c;
  enddef;
  def map between sc_potassium_flux and lumen for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_s_K and C_s_K;
    vars C_c_K and C_c_K;
    vars psi_s and psi_s;
    vars psi_c and psi_c;
  enddef;
  def map between sc_chloride_flux and cytosol for
    vars G_sc_Cl and G_sc_Cl;
    vars P_sc_Cl and P_sc_Cl;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_s_Cl and C_s_Cl;
    vars C_c_Cl and C_c_Cl;
    vars psi_s and psi_s;
    vars psi_c and psi_c;
  enddef;
  def map between sc_chloride_flux and interstitialfluid for
    vars G_sc_Cl and G_sc_Cl;
    vars P_sc_Cl and P_sc_Cl;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_s_Cl and C_s_Cl;
    vars C_c_Cl and C_c_Cl;
    vars psi_s and psi_s;
    vars psi_c and psi_c;
  enddef;
  def map between sc_chloride_flux and environment for
    vars time and time;
  enddef;
  def map between sc_chloride_flux and ms_sodium_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars psi_s and psi_s;
  enddef;
  def map between sc_chloride_flux and ms_chloride_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_s_Cl and C_s_Cl;
    vars psi_s and psi_s;
  enddef;
  def map between sc_chloride_flux and ms_potassium_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars psi_s and psi_s;
  enddef;
  def map between sc_chloride_flux and lumen for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_s_Cl and C_s_Cl;
    vars C_c_Cl and C_c_Cl;
    vars psi_s and psi_s;
    vars psi_c and psi_c;
  enddef;
  def map between ms_sodium_flux and lumen for
    vars G_ms_Na and G_ms_Na;
    vars P_ms_Na and P_ms_Na;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Na and C_m_Na;
    vars C_s_Na and C_s_Na;
    vars psi_m and psi_m;
    vars psi_s and psi_s;
  enddef;
  def map between ms_sodium_flux and interstitialfluid for
    vars G_ms_Na and G_ms_Na;
    vars P_ms_Na and P_ms_Na;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Na and C_m_Na;
    vars C_s_Na and C_s_Na;
    vars psi_m and psi_m;
    vars psi_s and psi_s;
  enddef;
  def map between ms_sodium_flux and environment for
    vars time and time;
  enddef;
  def map between ms_sodium_flux and ms_chloride_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars psi_m and psi_m;
    vars psi_s and psi_s;
  enddef;
  def map between ms_sodium_flux and ms_potassium_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars psi_m and psi_m;
    vars psi_s and psi_s;
  enddef;
  def map between ms_sodium_flux and cytosol for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Na and C_m_Na;
    vars psi_m and psi_m;
    vars psi_s and psi_s;
  enddef;
  def map between ms_chloride_flux and lumen for
    vars G_ms_Cl and G_ms_Cl;
    vars P_ms_Cl and P_ms_Cl;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Cl and C_m_Cl;
    vars C_s_Cl and C_s_Cl;
    vars psi_m and psi_m;
    vars psi_s and psi_s;
  enddef;
  def map between ms_chloride_flux and interstitialfluid for
    vars G_ms_Cl and G_ms_Cl;
    vars P_ms_Cl and P_ms_Cl;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Cl and C_m_Cl;
    vars C_s_Cl and C_s_Cl;
    vars psi_m and psi_m;
    vars psi_s and psi_s;
  enddef;
  def map between ms_chloride_flux and environment for
    vars time and time;
  enddef;
  def map between ms_chloride_flux and ms_potassium_flux for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars psi_m and psi_m;
    vars psi_s and psi_s;
  enddef;
  def map between ms_chloride_flux and cytosol for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_Cl and C_m_Cl;
    vars C_s_Cl and C_s_Cl;
    vars psi_m and psi_m;
    vars psi_s and psi_s;
  enddef;
  def map between ms_potassium_flux and lumen for
    vars G_ms_K and G_ms_K;
    vars P_ms_K and P_ms_K;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_K and C_m_K;
    vars C_s_K and C_s_K;
    vars psi_m and psi_m;
    vars psi_s and psi_s;
  enddef;
  def map between ms_potassium_flux and interstitialfluid for
    vars G_ms_K and G_ms_K;
    vars P_ms_K and P_ms_K;
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_K and C_m_K;
    vars C_s_K and C_s_K;
    vars psi_m and psi_m;
    vars psi_s and psi_s;
  enddef;
  def map between ms_potassium_flux and environment for
    vars time and time;
  enddef;
  def map between ms_potassium_flux and cytosol for
    vars time and time;
    vars RT and RT;
    vars F and F;
    vars C_m_K and C_m_K;
    vars C_s_K and C_s_K;
    vars psi_m and psi_m;
    vars psi_s and psi_s;
  enddef;
  def group as encapsulation for
    comp epithelial incl
      comp environment;
      comp NHE3;
      comp total_transepithelial_sodium_flux;
      comp solute_concentrations;
      comp total_transepithelial_potassium_flux;
      comp mc_sodium_flux;
      comp mc_chloride_flux;
      comp mc_potassium_flux;
      comp ms_sodium_flux;
      comp ms_chloride_flux;
      comp ms_potassium_flux;
      comp NBC_current;
      comp sc_potassium_flux;
      comp sc_chloride_flux;
      comp lumen;
      comp cytosol;
      comp interstitialfluid;
    endcomp;
  enddef;
enddef;
